\Ankit Sood
\Pavlovian conditioning with WHITE NOISE. CS will trigger Whitenoise and NS will trigger Siren
\Modified from CC's code 'DS NS Traning Stage 1'
\Last Edited 12.3.18
\EDITED ON 12/17/20 FOR TROUBLESHOOTING
\EDITED ON 2.11.21- Earlier Z14 was triggered on pump off so pump ttl was delayed. Changed that from S.S.7 S3-S2. now pump ttl triggers on pump on.
\EDITED ON 5.13.21- Introduced output 48 for lick ttl
\CONSTANTS
\^leftLever = 1
\^rightLever = 2
\^leftStimLight = 4
\^rightStimLight = 5
^CSTone = 6
^CSTone2 = 23
^WhiteNoise = 8
^Boxlight = 28
^Pump1 = 9
^Pump2 = 10
^Houselight = 7


\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\Sound stuff from Jocelyn's old code\
\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\\
\Sound frequencies and other parameters
DIM R=8 \soundParams
     ^ToneDur=10000         \R(0) Length of tone's on time, in ms
     ^ToneFreq=2600         \R(1) freq of tone
     ^SirenBaseFreq=6000    \R(2) starting (low) freq of the siren (Hz)
     ^SirenMaxFreq=8000     \R(3) ending (high) freq of the siren (Hz)
     ^SirenStepFreq=200     \R(4) Amount by which to increase or decrease the frequency every 10 ms
     ^RFTime=1              \R(5) rise time in ms
     ^Amplitude=85          \R(6) amplitude (dB) of tones (note this is not actual amplitude;
                            \95 dB corresponds to ~85 dB @ 4 kHz on the box floor)
                            \R(7) is the current freq of siren
     ^SirenAmp=93           \R(8) is siren amplitude




\INPUTS
^PortEntry = 6
^Lick = 7
\^leftLeverPress = 1
\^rightLeverPress = 3

\OUTPUTS
^nsTTL = 41 \sends signal to TTL, Plexon, etc.
^ds1TTL=42 \sends signal to TTL for cs with pump1, Plexon, etc.
^portTTL=43    \sends signal to TTL, Plexon, etc.
^Reward1TTL=44 \sends signal to TTL, Plexon, etc. Lick TTL doesn't work because MedPC does not recognise lick with plastic cover on floor.
^PortExitTTL=45 \sends TTL signal for port exit
^Reward2TTL=46 \sends TTL signal when pump is on
^ds2TTL=47\sends signal to TTL for cs with pump2
^lickTTL=48\sends ttl pulse for lick

\ Inter-trial intervals in seconds
LIST X = 10, 20, 30, 40, 50, 10, 20, 30, 40, 50   \ITI

\ Choose CS or NS.
LIST Y = 0, 0, 0, 0, 0, 1, 1, 1, 1, 1


LIST F= 1,1,1,1,2 \equal likelyhood of pump 1, 2, or 3 being activated (should result in 10 trials of each)
Var_Alias Startup Delay (Sec)                 = A(0)
Var_Alias Number of trials                    = A(1)
Var_Alias CS duration                         = A(2)
Var_Alias Pump Delay (Sec)                    = A(3)
Var_Alias Pump duration (Sec)                 = A(4)
Var_Alias Paired (0), or Unpaired (1) CS-US   = A(5)




DIM A=9 \stageParams
    \A(0)=Delay before 1st ITI in seconds (default 120 sec)
    \A(1)=Number of CS trials (default 60)
    \A(2)=Duration of CS phase in seconds (default 10 sec)
    \A(3)=Delay between CS+ ON and US ON for paired
    \A(4)=Pump duration in sec (default 5 sec)
    \A(5)=0 if paired CS-US, 1 if unpaired




\WORKING VARIABLES
DIM B=81 \workingVars
    \B(0) = 1" in MED time units, used for time input calculations
    \B(1) = Current trial #
    \B(2) = Current ITI length in seconds
    \B(3) = Current phase of trial, where 1=preCS 2=CS 3=postCSPlus 0=ITI 4=NS 5=postNS
    \B(4) = Box number of control box
    \B(5) = Reward count

    \B(6) = Total PEs
    \B(7) = PEs in ITI
    \B(8) = PEs in preCS
    \B(9) = PEs in CS
    \B(10)= PEs in postCS
    \B(11)= PEs in NS
    \B(12)= PEs in postNS

    \B(13)= Event timer in .01" units
    \B(14)= Current trial CS (1) versus NS (0)
    \B(15)= Program version number
    \B(16)= Elapsed seconds in current context
    \B(17)= Number of CS
    \B(18)= Number of NS
    \B(19)= Onset time of most recent cue
    \B(20)= Onset time of most recent cue-induced port entry & licking

    \B(21)= Number of CS trials with a port entry
    \B(22)= Number of NS trials with a port entry
    \B(23)= CS with PE to Number of CS Ratio
    \B(24)= NS with PE to Number of NS Ratio
    \B(25)= CS PE Mean Latency
    \B(26)= NS PE Mean Latency
    \B(27)= Not in use in this program
    \B(28)= Not in use in this program
    \B(29)= Total Time in Port
    \B(30)= Port Time in ITI
    \B(31)= Port Time in Pre CS/NS
    \B(32)= Port Time in CS
    \B(33)= Port Time in Post CS
    \B(34)= Port Time in NS
    \B(35)= Port Time in Post NS

    \B(36)= Total Licks
    \B(37)= Licks in ITI
    \B(38)= Licks in Pre CS/NS
    \B(39)= Licks in CS
    \B(40)= Licks in Post CS
    \B(41)= Licks in NS
    \B(42)= Licks in Post NS
    \B(43)= Number of CS trials with licks
    \B(44)= Number of NS trials with licks
    \B(45)= CS with Licks to Number of CS Ratio
    \B(46)= NS with Licks to Number of NS Ratio
    \B(47)= Licks in 5 sec post CS port entry
    \B(48)= Licks in 5 sec post NS port entry
    \B(51) = Current reward delivery (which pump will be activated)




\DATA ARRAYS
DIM H=61 \DStime   \ CS onset time per trial
DIM I=61 \NStime   \ NS onset time per trial
DIM J=61 \UStime   \ US onset time per trial

DIM K=9999 \PEtime \ PE timestamps in sec
DIM L=9999 \PEdur \ PE durations in sec
DIM M=31 \DSPElat   \ Latency to PE following CS per trial
DIM N=31 \NSPElat   \ Latency to PE following NS per trial
DIM O=31 \DSPE1   \ Time of first PE following CS
DIM P=31 \NSPE1   \ Time of first PE following NS
DIM S=9999 \lickTime \ Lick timestamps in sec
DIM V=31 \lickDSpost   \ 5-sec Licks after first PE following CS
DIM U=31 \lickNSpost   \ 5-sec Licks after first PE following NS
DIM C= 60 \Reward identity for DS trials (pump 1, 2, or 3)


\Z signals (within box):
    \Z1 = Start initial delay
    \Z2 = Start CS
    \Z3 = Start US (possibly with delay)
    \Z4 = Start new trial (pre-CS)
    \Z5 = Start delay before session
    \Z6 = Start NS
    \Z9 = End of last trial
    \Z10 = Test Complete
    \Z11 = Signal that 5" has passed since first PE after CS
    \Z12 = Siren on
    \Z13 = Siren off




\K signals (across all boxes):
\K1-K16= Used to report loaded boxes and choose lowest-numbered one as control
\K21 = Start 1st half of ITI
\K22 = Start 2nd half of ITI
\K23 = Start pre-CS period
\K24 = Start CS period
\K25 = Start post-CS period
\K26 = Start NS period
\K27 = Start post-NS period
\K28-29= Variable Reward Identity (tells other boxes which pump to turn on by setting B(51))
    \K28= Pump1
    \K29= Pump2




S.S.1, \ Session clock in .01" units
S1,
  #K21:--->S2 \ K21= Start first half of ITI

S2,
  .01": ADD B(13)--->SX \ B(13)= Event timer in .01" units; milliseconds



S.S.2, \ Test the boxes
S1,
   .1": SHOW 1, Test, A(1);
       SET R(0)= ^ToneDur;
       SET R(1)= ^ToneFreq;
       SET R(2)= ^SirenBaseFreq;
       SET R(3)= ^SirenMaxFreq;
       SET R(4)= ^SirenStepFreq;
       SET R(5)= ^RFTime;
       SET R(6)= ^Amplitude;
       SET R(7)= 0;
       SET R(8)= ^SirenAmp;
       ~SetRack(MG,3);~; \Set Rack to 3
       ~InitANL926RP(MG,3,790);~; \ Reset ANL-926
       ~SetRF(MG, BOX, R[5]);~;
       ON ^HouseLight--->S2
S2,
  #R^PortEntry: ON ^WhiteNoise, ^Pump1 ;~setFreq(MG,BOX,R[1]);~; ~setDur(MG,BOX,R[0]);~; ~onAmp(MG, BOX, R[6]);~; --->S3
S3,
   2":~toneOff(MG, BOX);~;OFF ^WhiteNoise, ^Pump1; Z12 ---> S4
S4,
   2": Z13; OFF ^HouseLight--->S5
S5,
  .1": SHOW 1, Ready,A(1); Z10--->S6
S6,
   5':--->SX



S.S.3, \ Initialization and trial control for all boxes.
S1, \Initialize variables
  .01": SET A(5)=0;   \This value specifies the protocol: 0 for paired CS-US or 1 for unpaired
        SET A(0)=10, A(1)=60, A(2)=10, A(3)=8, A(4)=2;
        SET B(0)=1";
        SET H(1)=-987.987, I(1)=-987.987, J(1)=-987.987, K(1)=-987.987, L(1)=-987.987--->SX
  #Z10:--->S2

S2, \Let all boxes know this box is loaded, to select unique control box in S.S.3
  #START: KBOX--->S3   \ie, send K1 if this is box 1, K2 if box 2, etc.
  #Z5:--->S3

S3, \Begin initial ITI
  #K21: ON ^Houselight--->S6

S4, \Begin 1st half of regular ITI
  #K21: SET B(3)=0--->S5

S5, \Begin 2nd half of regular ITI, and US if unpaired
  #K22: IF A(5)=1 [@T2,@F2] \A(5)=0 from S.S.2
          @T2: Z3--->S6
          @F2:--->S6

S6, \Begin Pre-CS, unless all trials have run and session is over
  #K23: SET B(3)=1;
        IF B(1) < A(1) [@T3,@F3]
          @T3: ADD B(1); SET I(B(1))=0, I(B(1)+1)=-987.987;
               SET J(B(1))=0, J(B(1)+1)=-987.987; Z4--->S7
          @F3: OFF ^Houselight; Z9--->S9

          \Is the current trial # is < the set number of trials?
          \If false, then end the session ---> S9

S7, \Begin CS, and also US (after delay) if paired
  #K24: SET B(3)=2; Z2;
        IF A(5)=0 [@T4,@F4]
          @T4: Z3--->S8
          @F4:--->S8
  #K26: SET B(3)=4; Z6 ---> S8

S8, \Begin Post-CS
  #K25: ---> S4
  #K27: ---> S4

S9, \A couple of extra seconds to update display, then quit
  2":--->STOPABORTFLUSH



S.S.4, \ Trial and ITI timing, mainly for the control box
S1, \Let the lowest-numbered running box (starting with 1) assume control
  #K1:  Z5; SET B(4)= 1--->S2
  #K2:  Z5; SET B(4)= 2--->S2
  #K3:  Z5; SET B(4)= 3--->S2
  #K4:  Z5; SET B(4)= 4--->S2
  #K5:  Z5; SET B(4)= 5--->S2
  #K6:  Z5; SET B(4)= 6--->S2
  #K7:  Z5; SET B(4)= 7--->S2
  #K8:  Z5; SET B(4)= 8--->S2
  #K9:  Z5; SET B(4)= 9--->S2
  #K10: Z5; SET B(4)=10--->S2
  #K11: Z5; SET B(4)=11--->S2
  #K12: Z5; SET B(4)=12--->S2

S2, \Pre-session delay, then check if this is the control box
  A(0)*B(0)#T: IF B(4)=BOX [@T1,@F1]  \If control, choose 1st ITI and proceed
                 @T1: K21; RANDD B(2)=X; RANDD B(51)=F--->S16
                 @F1:--->S15           \Non-control: Go into passive state

S3, \Signal end of 1st half of ITI to all boxes, in case this is unpaired protocol
  (B(2)/2-A(3))*B(0)#T: K22--->S4   \Take into account pump delay for mid-ITI delivery

S4, \Signal end of 2nd half of ITI to all boxes
  (B(2)/2+A(3))*B(0)#T: K23--->S5

S5, \Pick NS or CS
   .1": RANDD B(14)=Y--->S6

S6, \Trigger NS or CS
   .1": IF B(14)=0 [@T3,@F3]
          @T3: --->S12    \NS trigger
          @F3: --->S7    \CS Trigger

S7, \Signal end of Pre-CS interval to all boxes
  10": K24--->S8

S8, \Signal end of CS interval to all boxes
  A(2)*B(0)#T: K25--->S9

S9, \Signal end of post-CS interval to all boxes, choose next ITI
  10": K21; RANDD B(2)=X; RANDD B(51)=F --->S10

S10, \In S10-S13, send a K signal at the start of the DS trial letting boxes know which pump to activate (which reward should be delivered)
 .01": IF B(51)=1 [@True,@False] \VARIABLE REWARD DELIVERY \Choose which pump to activate (9 or 10)
          @True: K28 ---> S3
          @False: --->S11
S11,
 .01": IF B(51)=2 [@True,@False] \VARIABLE REWARD DELIVERY \Choose which pump to activate (9, 10, or 11)
          @True: K29 ---> S3
          @False: --->S12

S12, \Signal end of Pre-NS interval to all boxes
  10": K26--->S13

S13, \Signal end of NS interval to all boxes
  10": K27--->S14

S14, \Signal end of post-NS interval to all boxes, choose next ITI
  A(2)*B(0)#T: K21; RANDD B(2)=X--->S3

S15, \Passive state for non-control boxes
  60':--->SX

S16, \In S16-19, send a K signal at the start of the DS trial letting boxes know which pump to activate (which reward should be delivered) * FOR FIRST TRIAL (these were being skipped over on trial 1)
 .01": IF B(51)=1 [@True,@False] \VARIABLE REWARD DELIVERY \Choose which pump to activate (9, 10, or 11)
          @True: K28 ---> S3
          @False: --->S17
S17,
 .01": IF B(51)=2 [@True,@False] \VARIABLE REWARD DELIVERY \Choose which pump to activate (9, 10, or 11)
          @True: K29 ---> S3
          @False: --->S16


S.S.5, \ Siren control

S1,
  #Z12: set R(7) = R(2); ~setFreq(MG,BOX,R[2]);~; ~onAmp(MG, BOX, R[8]);~; --->S2  \Currently, Tone one is substituted.
S2,
 .01":set R(7) = R(7) + ^SirenStepFreq; ~setFreq(MG,BOX,R[7]);~; ~onAmp(MG, BOX, R[8]);~; if R(7)>=^SirenMaxFreq [@GoDown, @Continue]
    @GoDown: --->s3
    @Continue: ---> s2
 #Z13: ~toneOff(MG, BOX);~ ---> S1
s3,
 .01":set R(7) = R(7) - ^SirenStepFreq; ~setFreq(MG,BOX,R[7]);~; ~onAmp(MG, BOX, R[8]);~; if R(7)<=^SirenBaseFreq [@GoUp, @Contin]
    @GoUp: --->s2
    @Contin: ---> s3
 #Z13: ~toneOff(MG, BOX);~; ---> S1



S.S.6, \ CS control
S1,
  #Z2: ON ^WhiteNoise; SET H(B(17))=B(13)/100--->S2

S2,
  A(2)*B(0)#T: OFF ^WhiteNoise ---> S1

  \#R^PortEntry: Z13 --->S1\ not required for CS training



S.S.7, \ CS US control
S1,
  #Z3:--->S2

S2,
  A(3)*B(0)#T: IF B(51)=1 [@True,@False] \VARIABLE REWARD DELIVERY \Choose which pump to activate (9 or 10)
          @True: ON ^Pump1; ON ^Reward1TTL; SET J(B(1))=B(13)/100; ADD B(5) --->S3    \Turn on pump 1
          @False: ON ^Pump2; ON ^Reward2TTL; SET J(B(1))=B(13)/100; ADD B(5)--->S4    \Turn on pump 2
S3,
  A(4)*B(0)#T: OFF ^Pump1; OFF ^Reward1TTL;  SET B(3)=3--->S1
 \Turn off pump 1 ; this is where variable pump duration could be implemented
S4,
  A(4)*B(0)#T: OFF ^Pump2; OFF ^Reward2TTL;  SET B(3)=3--->S1
\Turn off pump 2 ; this is where variable pump duration could be implemented


S.S.8, \ NS control
S1,
  #Z6: Z12; SET I(B(18))=B(13)/100--->S2

S2,
  A(2)*B(0)#T: Z13; SET B(3)=5--->S1



S.S.9, \ Record PE times and durations
S1,
  #K21:--->S2

S2,
  #R^PortEntry: ADD B(6), B(7+B(3));
                SET K(B(6))=B(13)/100, L(B(6))=0, K(B(6)+1)=-987.987, L(B(6)+1)=-987.987--->S3
  #Z9:--->S1

S3, \In this state, PE has occurred and duration is being recorded
#R^PortEntry: ON ^PortTTL; OFF ^PortExitTTL --->S3
  #Z9 ! 0.01": SET L(B(6))=(B(13)-1)/100-K(B(6)); OFF ^PortTTL; ON ^PortExitTTL--->S2




S.S.10, \ Latency to enter port after CS
S1,
  #Z2: --->S2

S2,
  A(2)*B(0)#T: SET M(B(17))=A(2), O(B(17))=0; ADD B(17) --->S1
  #R^PortEntry: ADD B(21); SET O(B(17))=B(13)/100  --->S3

S3,
  5": SET M(B(17))=O(B(17))-H(B(17)); ADD B(17); SET O(B(17)+1)=-987.987--->S1



S.S.11,  \ Latency to enter port after NS
S1,
  #Z6: --->S2

S2,
  A(2)*B(0)#T: SET N(B(18))=A(2); SET P(B(18))=0; ADD B(18)--->S1
  #R^PortEntry: ADD B(22); SET P(B(18))=B(13)/100--->S3

S3,
  5": SET N(B(18))=P(B(18))-I(B(18)); ADD B(18); SET P(B(18)+1)=-987.987--->S1



S.S.12,  \ Calculates average latency for CS and NS port entries
S1,
   #K21: ARITHMETICMEAN B(25) = M,0,B(17); SHOW 11, CS PE Latency, B(25);
         ARITHMETICMEAN B(26) = N,0,B(18); SHOW 12, NS PE Latency, B(26)--->SX



S.S.13, \ Records time spent in port in each window
S1,
    #K21:--->S2

S2, \ Begin ITI period count of PE time
    #R^PortEntry: ADD B(29); ADD B(30+B(3))--->S2



S.S.14,  \ CS Ratio
S1,
   #z2: --->S2

S2,
  A(2)*B(0)#T: --->S3
  #R^PortEntry: --->S3

S3,
  A(2)*B(0)#T: SET B(23)=B(21)/B(17)--->S1



S.S.15,  \ NS Ratio
S1,
   #z6:--->S2

S2,
  A(2)*B(0)#T: --->S3
  #R^PortEntry: --->S3

S3,
  10": SET B(24)=B(22)/B(18)--->S1



S.S.16, \ Counts the 5 seconds after the first post-CS port entry
s1,
  #Z2: ---> s2

s2,
  #R^PortEntry:--->s3

s3,
  5": z11 ---> s1



S.S.17, \ Counts the 5 seconds after the first post-NS port entry
s1,
  #Z6: ---> s2

s2,
  #R^PortEntry:--->s3

s3,
  5": z11 ---> s1



S.S.18, \ Record licks & lick timestamps
S1,
  #K21:--->S2

S2,
  #R^Lick: ADD B(36); ADD B(37+B(3));
           SET S(B(36))=B(13)/100, S(B(36)+1)=-987.987 ---> S2
           \ITI, PreCue, Cue, and PostCue
  #Z9:--->S1
  #Z2:--->S3
  #Z6:--->S5

S3, \Waits for post-CS port entry
  #R^PortEntry: ---> s4
  A(2)*B(0)#T: ---> s2

S4, \Counts licks for 5 sec post CS port entry
  #R^Lick: ADD B(36); ADD B(37+B(3)); ADD B(47); ADD V(B(17)); SET S(B(36))=B(13)/100, S(B(36)+1)=-987.987 ---> s4
  #z11: ---> s2

S5, \Waits for post-NS port entry
  #R^PortEntry: ---> s6
  A(2)*B(0)#T: ---> s2

S6, \Counts licks for 5 sec post NS port entry
  #R^Lick: ADD B(36); ADD B(37+B(3)); ADD B(48); ADD U(B(18)); SET S(B(36))=B(13)/100, S(B(36)+1)=-987.987 ---> s4
  #z11: ---> s2



S.S.19, \ CS Lick Ratio
S1,
   #z2: --->S2

S2,
  A(2)*B(0)#T: --->S3
  #R^Lick: ADD B(43)--->S3

S3,
  A(2)*B(0)#T: SET B(45)=B(43)/B(17)--->S1



S.S.20, \ NS Lick Ratio
S1,
   #z6:--->S2

S2,
  A(2)*B(0)#T: --->S3
  #R^Lick: ADD B(44)--->S3

S3,
  A(2)*B(0)#T: SET B(46)=B(44)/B(18)--->S1



S.S.21, \ Display of trial number, current state, and elapsed secs in current state
S1,
  #Z5: SHOW 1,Delay,B(16)--->S2

S2,
  #K21: SET B(16)=0;
        IF BOX=B(4) [@T1,@F1]
          @T1:~ShowCommand(MG,Box,1,'ITI '+IntToStr(Round(B[1])+1)+' ('+IntToStr(Round(B[2]))+')',B[12]);~--->S3
          @F1:~ShowCommand(MG,Box,1,'ITI '+IntToStr(Round(B[1])+1),B[12]);~--->S3
  1":   ADD B(16);
        SHOW 1,Delay,B(16)--->SX
  #Z9:--->S9

S3,
  #Z4: SET B(16)=0;
       ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' PRE',B[12]);~--->S4
  1":  ADD B(16);
       IF BOX=B(4) [@T2,@F2]
         @T2:~ShowCommand(MG,Box,1,'ITI '+IntToStr(Round(B[1])+1)+' ('+IntToStr(Round(B[2]))+')',B[12]);~--->SX
         @F2:~ShowCommand(MG,Box,1,'ITI '+IntToStr(Round(B[1])+1),B[12]);~--->SX
  #Z9:--->S9

S4,
  #K24: SET B(16)=0;
        ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' CS',B[12]);~--->S5
  #K26: SET B(16)=0;
        ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' NS',B[12]);~--->S5
 1":   ADD B(16);
        ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' PRE',B[12]);~--->SX
  #Z9:--->S9

S5,
  #K25: SET B(16)=0;
        ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' POSTCS',B[12]);~--->S6
  #K27: SET B(16)=0;
        ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' POSTNS',B[12]);~--->S6
   1":   ADD B(16);
        ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' CS',B[12]);~--->SX
  #Z9:--->S9

S6,
  #K21: SET B(16)=0;
       IF BOX=B(4) [@T3,@F3]
         @T3:~ShowCommand(MG,Box,1,'ITI '+IntToStr(Round(B[1])+1)+' ('+IntToStr(Round(B[2]))+')',B[12]);~--->S3
         @F3:~ShowCommand(MG,Box,1,'ITI '+IntToStr(Round(B[1])+1),B[12]);~--->S3
  1":   ADD B(16);
        ~ShowCommand(MG,Box,1,'TRL '+IntToStr(Round(B[1]))+' POST',B[12]);~--->SX
  #Z9:--->S9

S9,
  60':--->SX


S.S.22, \ Summary display of PE and Lick data
S1,
  #K21: SHOW 2,Total PE,B(6),
    3, Total Licks,B(36),
    4, CS PE Licks, B(47),
    5, CS PE Ratio, B(23),
    6, NS Licks,B(41),
    7, NS PE Ratio, B(24),
    8, CS PE Latency, B(25),
    9, NS PE Latency, B(26),
    10,Total PT,B(29),
    11,ITI PE, B(7),
    12,ITI PT,B(30),
    13,PreCue PE,B(8),
    14,PreCue PT,B(31),
    15,CS PE,B(9),
    16,CS PT,B(32),
    17,PostCS PE,B(10),
    18,PostCS PT,B(33),
    19,NS PT,B(34),
    20,NS PE,B(11),
    21,PostNS PT,B(35),
    22,PostNS PE,B(12)--->S2

S2,
  1": SHOW 2,Total PE,B(6),
    3, Total Licks,B(36),
    4, CS PE Licks, B(47),
    5, CS PE Ratio, B(23),
    6, NS Licks,B(41),
    7, NS PE Ratio, B(24),
    8, CS PE Latency, B(25),
    9, NS PE Latency, B(26),
    10,Total PT,B(29),
    11,ITI PE, B(7),
    12,ITI PT,B(30),
    13,PreCue PE,B(8),
    14,PreCue PT,B(31),
    15,CS PE,B(9),
    16,CS PT,B(32),
    17,PostCS PE,B(10),
    18,PostCS PT,B(33),
    19,NS PT,B(34),
    20,NS PE,B(11),
    21,PostNS PT,B(35),
    22,PostNS PE,B(12)--->SX



S.S.23, \NS TTL Signal
S1,
    #Z6: ON ^nsTTL ---> S2
S2,
    .1": OFF ^nsTTL --->S1


\S.S.24, \PE TTL Signal
\S1,
 \   #R^PortEntry: ON ^portTTL ---> S2
\S2,
 \   .1": OFF ^portTTL ---> S1

S.S.24, \Lick TTL Signal
S1,
    #R^Lick: ON ^lickTTL ---> S2
S2,
    .05": OFF ^lickTTL ---> S1

S.S.25, \DS TTL Signal \Add variable TTL pulse to know which pump will be turned on (upcoming reward identity)
S1,
    #K21: --->S2
S2,
     #Z2: IF B(51)=1 [@True,@False] \VARIABLE REWARD DELIVERY \Choose which pump to activate (9, 10, or 11)
          @True: ON ^ds1TTL--->S3   \If pump 1, send a single DS TTL pulse
          @False: ON ^ds2TTL --->S4    \Check if another pump was chosen

S3,
    .01": OFF ^ds1TTL--->S2

S4,
    0.01": OFF ^ds2TTL---> S2



S.S.26, \VARIABLE REWARD DELIVERY ; listen for K Pulse containing pump ID to turn on (B(51) = 1, 2, or 3)
    S1,
     #K28: SET (B(51))= 1--->S2
     #K29: SET(B(51))= 2--->S2

     S2,
     .1": SET C(B(17))=B(51) ---> S1 \save reward for this trial to array C
